create soma, treeA[1]


access soma
objectvar f

begintemplate Sin
objref list, diff1[1],p2x30[1], r5t3[1]  
public diff1,p2x30, r5t3
public list

proc init(){
nsyn =$1
objectvar diff1[nsyn],p2x30[nsyn], r5t3[nsyn]
list= new List()
for i=0, nsyn-1 {
diff1[i]=new AtP_4(0.5)
//p2x30[i] = new p2x3(0.5)
r5t3[i] = new r5ht3a(0.5)
diff1[i].h =$2
diff1[i].Deff = 0.4
diff1[i].c0cleft = 10
diff1[i].tx1 = 10
r5t3[i].gmax = 8
//p2x30[i].gmax = 0
r5t3[i].Ev = 20
//setpointer p2x30[i].patp, diff1[i].atp
setpointer r5t3[i].serotonin, diff1[i].atp
}
//p2x30[0].gmax = 60
//p2x30[1].gmax = 60
for i=0, nsyn-1 {
 list.append(diff1[i])
}
}
endtemplate Sin

n=1
soma {
    nseg = 1
    diam = 18.8
    L = 18.8
    Ra = 123.0
    //insert nav1p8
    //gbar_nav1p8=3.5
    //insert ka       
    //gbar_ka = 2.2
    insert hh
    gnabar_hh=0.25
    gl_hh = .0002
    el_hh = -60.0
    gkbar_hh = 0.36

}

f = new File()

f.ropen("./topologies/modeline.dat")
ndendA = f.scanvar() 
create treeA[ndendA]
objref GrCell[ndendA]


for i = 0,ndendA-1 {
      
  me = f.scanvar() - 1 // sets the current branch/section 
  child1 = f.scanvar() - 1 

  treeA[me]{ 
    nseg = 1
    diam = f.scanvar()
    L = f.scanvar()
    Ra = 123

    pt3dclear()

    pt3dadd(f.scanvar(),f.scanvar(),f.scanvar(),diam)

    x = f.scanvar()
    y = f.scanvar()
    z = f.scanvar()

    pt3dadd(x, y, z,diam)

    if(me > 1){
        h = sqrt((18000-x)*(18000-x) + (1-y)*(1-y) + (1-z)*(1-z))

        GrCell[me] = new Sin(n,h)
    }

      
    //insert nav1pp8
    //gbar_nav1pp8= 0.01
    //slow_inact_nav18=1
    insert na_ion
    ena = 50
    insert na17a
    gbar_na17a=13.2
    insert extracellular
    xg = 1000
    xc = 300
    //xraxial = 100
    insert nap
    gbar_nap = 0.00022
    insert nafast
    gbar_nafast=0.01
    insert naslow
    gbar_naslow=0.01

    insert kv       
    gbar_kv = 60
    ek = -77
    insert kdr0
    gbar_kdr0 = 0.4
      
    insert kad 
    gbar_kad = 0.15
    insert kap   
    gbar_kap = 0.15

    if (child1 >= 0) {
      connect treeA[child1](0), 1
    }

  }
}

f.close() //closes the file data holder called f


// Connect things together 
connect treeA[0](0), soma(1) 

print soma.v

{load_file("./session/11.ses")}
{load_file("recording.hoc")}

objref datas
datas= new Vector()
datas.record(&soma.v(0.5))
/*
objref datas1
datas1= new Vector()
datas1.record(&GrCell[71].p2x30[0].i)
objref datas2
datas2= new Vector()
datas2.record(&GrCell[71].p2x30[1].Ro)
objref datas3
datas3= new Vector()
datas3.record(&GrCell[71].p2x30[0].Ro)*/
tstop = 150 
v_init = -72
objref fok
// Start run
run()

objref datafile
strdef basename, extension, filename00
basename = "what"
extension = "txt"

fok=new File()

sprint(filename00, "%s%d.%s", basename, 1, extension)
fok.wopen(filename00)
datas.printf(fok)
fok.close()
/*
sprint(filename00, "%s%d.%s", basename, 0, extension)
fok.wopen(filename00)
datas1.printf(fok)
fok.close()

sprint(filename00, "%s%d.%s", basename, 3, extension)
fok.wopen(filename00)
datas2.printf(fok)
fok.close()

sprint(filename00, "%s%d.%s", basename, 2, extension)
fok.wopen(filename00)
datas3.printf(fok)
fok.close()*/



forall psection()


