create soma, treeA[1]

tstop = 80 

access soma
objectvar f

begintemplate Sin
objref list, diff1[1],p2x30[1] 
public diff1,p2x30
public list
proc init(){
nsyn =$1
objectvar diff1[nsyn],p2x30[nsyn]
list= new List()
for i=0, nsyn-1 {
diff1[i]=new AtP_4(0.5)
p2x30[i] = new p2x3(0.5)
diff1[i].c0cleft = 3
diff1[i].Deff = 0.4
p2x30[i].Ev = -40
setpointer p2x30[i].patp, diff1[i].atp
}
diff1[0].h =$2
diff1[1].h =$3
//diff1[0].k = 0
//diff1[1].k = 0
diff1[0].tx1 = $5
diff1[1].tx1 = $4
//diff1[2].h =$6
//diff1[3].h =$7
//diff1[2].tx1 = $8
//diff1[3].tx1 = $9
for i=0, nsyn-1 {
 list.append(diff1[i])
}
}
endtemplate Sin

n=2
soma {
    nseg = 1
    diam = 18.8
    L = 18.8
    Ra = 123.0
    insert hh
    gnabar_hh=0.25
    gl_hh = .0002
    el_hh = -60.0
    gkbar_hh = 0.36
}

f = new File()

f.ropen("modeline.dat")
ndendA = f.scanvar() 
create treeA[ndendA]
objref GrCell[ndendA]


for i = 0,ndendA-1 {
      
  me = f.scanvar() - 1 // sets the current branch/section 
  child1 = f.scanvar() - 1 

  treeA[me]{ 
    nseg = 1
    diam = f.scanvar()
    L = f.scanvar()
    Ra = 123

    pt3dclear()

    pt3dadd(f.scanvar(),f.scanvar(),f.scanvar(),diam)

    x = f.scanvar()
    y = f.scanvar()
    z = f.scanvar()

    pt3dadd(x, y, z,diam)

   if(me > 10){
        h1 = (0.00001)*((20000-x)*(20000-x) + (10-y)*(10-y) + (1-z)*(1-z))
        h2 = (0.00001)*((15000-x)*(15000-x) + (10-y)*(10-y) + (1-z)*(1-z))
        h3 = (0.00001)*((5000-x)*(5000-x) + (10-y)*(10-y) + (1-z)*(1-z))
        //h4 = (0.00001)*((10000-x)*(10000-x) + (10-y)*(10-y) + (1-z)*(1-z))

        GrCell[me] = new Sin(n, h1, h2, 180, 30)

    }
//

    // insert hh
   // gnabar_hh= 2
   // gkbar_hh= 0.4
   // gl_hh= 0.0005
   // insert pas
    //g_pas = .0001667
    //e_pas = -60.0
insert na17a
       // insert na18a

     gbar_na17a=30.2
       //insert extracellular
//xg = 100
//xc = 300
//xraxial = 100

//insert na
//gbar_na = 1
//insert nap
//gbar_nap = 0.0004
//insert naf
//gbar_naf = 0.004

     // insert nav1p8
     // gbar_nav1p8=0.7
        //insert kf
       // insert ks
        insert kv       
        gbar_kv = 64
        insert ka       
        gbar_ka = 0.8
        //insert kdr
        //gkdrbar_kdr = 0.0033
    
        //insert sk
        //insert cal
//gbar_cal = 0.005

      
       //insert cat
       //eca = 126.1
      //gmax_cat=0.001


    if (child1 >= 0) {
      connect treeA[child1](0), 1
    }

  }
}

f.close() //closes the file data holder called f


// Connect things together 
connect treeA[0](0), soma(1) 

print soma.v

forall psection()


