create    soma, axon, dend1[1091]

tstop = 1000

access soma
objectvar f

begintemplate Sin
objref list, diff1[1],p2x30[1] 
public diff1,p2x30
public list

proc init(){
nsyn =$1
objectvar diff1[nsyn],p2x30[nsyn]
list= new List()
for i=0, nsyn-1 {
diff1[i]=new AtP_4(0.5)
p2x30[i] = new p2x3(0.5)
diff1[i].h =$2
setpointer p2x30[i].patp, diff1[i].atp
}
for i=0, nsyn-1 {
 list.append(diff1[i])
}
}
endtemplate Sin
objref GrCell[2000]

proc neurong() { local i, j

    soma {
        nseg = 1
        pt3dclear()
        for j = 1, fscan() {
            pt3dadd(fscan(),fscan(),fscan(),fscan())
        }
        insert pas
        g_pas = 0.0001667
        e_pas = -60.0
        insert hh

        
    }

    axon {
        nseg = 10
        pt3dclear()
        pt3dadd(0,0,0,1)
        pt3dadd(0,0,100,1)

    }
    soma connect axon (0), 0.5
    soma connect dend1[0] (0), 0.5

    for i = 0,1090 {
        dend1[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                x = fscan()
                y = fscan()
                z = fscan()
                diam = fscan()
                pt3dadd(x,y,z,diam)

                insert cat
                eca = 126
                h = 0.001*(x*x + y*y + z*z)
                GrCell[i] = new Sin(3,h)
                insert na 
                gbar_na=58.2 - 0.45*h
                insert kv       
                gbar_kv = 64
                insert ka       
                gbar_ka = 0.025
                //insert bk
                insert pas
                g_pas = 0.00005
                e_pas = -60.0+0.11*h

                //insert hh
                //gnabar_hh= 0.82
                //gkbar_hh= 0.25
               // gcabar_hh= 0.25
                //gl_hh= 0.00051
            
            }
        }
    }

    for i = 1,1090 {
        dend1[fscan()] connect dend1[i] (0), fscan()
    }
    vs=0
    for i = 1040,1060 {
        vs=vs+dend1[i].v
}


}


neurong()


SOMA COORDINATES AND DIAMETERS:

    3
     2.8   -117.1        2        1
     2.8   -117.1     2.05        1
     2.8   -117.1      2.1        1


NEURITE COORDINATES AND DIAMETERS:

    1 2
     5.9   -113.8      3.3      0.9
     3.7     -108      3.3      1.3

    1 2
     3.7     -108      3.3      1.3
     4.6     -104        2      1.3

    1 2
     4.6     -104        2      1.3
     3.9   -101.8      2.2        1

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

CONNECTIONS:
        0    1
        1    1
        2    1
        3    1
        4    1
        5    1
        6    1
        7    1
        8    1
        9    1
       10    1
       11    1
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

proc correct() {
  /* correct diameters of dendrites at origins of basals */
        dend1[777] {diam=1.40}
        dend1[808] {diam=2.40}
        dend1[923] {diam=1.40}
        dend1[957] {diam=1.40}
        dend1[1006] {diam=1.70}
        dend1[1055] {diam=2.00}
        dend1[1059] {diam=1.70}
        dend1[1067] {diam=2.00}
  /* correct diameters of dendrites at origins of obliques */
        dend1[33] {diam=1.20}
        dend1[48] {diam=1.35}
        dend1[74] {diam=1.60}   
        dend1[86] {diam=2.45}
        dend1[113] {diam=0.80}
        dend1[128] {diam=1.00}
        dend1[162] {diam=0.80}
        dend1[760] {diam=1.30}
}

correct()
/* objref f
objref data

f = new File()

f.ropen("A.dat")
ndendA = f.scanvar() 
f.close() 
   data= new Vector()
   // Start recording
   data.record(&dend1[ndendA].v(0.5))

objref fok
// Start run
run()

objref datafile
strdef basename, extension, filename
extension = "dat"
basename = "what"

sprint(filename, "%s%d.%s", basename, ndendA, extension)
fok=new File()


fok.wopen(filename)
data.printf(fok)
fok.close()
*/

// Plot soma membrane potential to command window???
print soma.v


forall psection()


